PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = workshop_test
  keyboardBackend = ioHub
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Routines
  Routine routine
    SliderComponent var_slider
      borderColor = white
      color = white
      fillColor = red
      font = Microsoft YaHei
      forceEndRoutine = False
      granularity = 1
      labels = (0, 10)
      letterHeight = 0.05
      size = (0.8, 0.06)
      startVal [time (s)] = 0
      storeHistory = True
      styles = rating
      ticks = (0, 10)
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    TextboxComponent text
      alignment = top-left
      anchor = top-left
      bold = False
      borderColor = gray
      color [set every repeat] = white
      editable = False
      fillColor = gray
      font = Microsoft YaHei
      letterHeight = 0.05
      pos = (-0.4, 0.15)
      size = (0.7, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent slider_update
      Code Type = Both
      Before Experiment:
        slider_marker_size = [0.06, 0.06]
      Before JS Experiment:
        var px_pos;

        var slider_marker_size = [0.06, 0.06];
      Begin JS Routine:
        is_pressed = false;
        var_slider.ticks = [0, maxValue];
        var_slider.labels = [0, maxValue];
        var_slider._skin.MARKER_SIZE = slider_marker_size;
      Begin Routine:
        # click status
        is_pressed = False

        # rebuild slider
        var_slider.ticks = (0, maxValue)
        var_slider.labels = (0, maxValue)
        var_slider._createElements()
        # change slider marker size
        var_slider.marker.size = slider_marker_size
      Each Frame:
        if not is_pressed and status_mouse.getPressed()[0]:
            is_pressed = True
            var_slider.fillColor = "green"
            timer = core.CountdownTimer(0.3)

        # if slider has been clicked
        if is_pressed:
            if timer.getTime() <= 0:
                continueRoutine = False
        else:
            var_slider.fillColor = "red"
            var_slider.markerPos = var_slider._posToRating(var_slider.mouse.getPos())
            var_slider.recordRating(var_slider.markerPos)
            text.text = "Trial " + str(loop.thisTrialN) + "，当前选择：" + str(int(var_slider.markerPos))
      Each JS Frame:
        if (((! is_pressed) && status_mouse.getPressed()[0])) {
            is_pressed = true;
            var_slider.fillColor = new util.Color("green");
            var_slider.refresh();
            timer = new util.CountdownTimer(0.3);
        }
        if (is_pressed) {
            if ((timer.getTime() <= 0)) {
                continueRoutine = false;
            }
        } else {
            var_slider.fillColor = new util.Color("red");
            px_pos = util.to_px(status_mouse.getPos(), "height", psychoJS.window);
            var_slider.markerPos = var_slider._posToRating(px_pos);
            var_slider.recordRating(var_slider.markerPos);
        //    text.text = ("当前选择" + Number.parseInt(var_slider.markerPos).toString());
            text.text = ((("Trial " + loop.thisTrialN.toString()) + "，当前选择：") + Number.parseInt(var_slider.markerPos).toString());
        }
    MouseComponent status_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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  Routine fixation
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine start
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $test
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Flow
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = trialSet.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('maxValue', 15)]),
      OrderedDict([('maxValue', 11)]),
      OrderedDict([('maxValue', 11)]),
      OrderedDict([('maxValue', 6)]),
      OrderedDict([('maxValue', 24)]),
      OrderedDict([('maxValue', 10)]),
      OrderedDict([('maxValue', 15)]),
      OrderedDict([('maxValue', 29)]),
      OrderedDict([('maxValue', 5)]),
      OrderedDict([('maxValue', 5)]),
      OrderedDict([('maxValue', 5)]),
      OrderedDict([('maxValue', 9)]),
      OrderedDict([('maxValue', 9)]),
      OrderedDict([('maxValue', 23)]),
      OrderedDict([('maxValue', 22)]),
      OrderedDict([('maxValue', 12)]),
      OrderedDict([('maxValue', 30)]),
      OrderedDict([('maxValue', 20)]),
      OrderedDict([('maxValue', 22)]),
      OrderedDict([('maxValue', 11)]),
      OrderedDict([('maxValue', 20)]),
      OrderedDict([('maxValue', 28)]),
      OrderedDict([('maxValue', 28)]),
      OrderedDict([('maxValue', 30)]),
      OrderedDict([('maxValue', 25)]),
      OrderedDict([('maxValue', 20)]),
      OrderedDict([('maxValue', 18)]),
      OrderedDict([('maxValue', 18)]),
      OrderedDict([('maxValue', 11)]),
      OrderedDict([('maxValue', 13)]),
      OrderedDict([('maxValue', 10)]),
      OrderedDict([('maxValue', 8)]),
      OrderedDict([('maxValue', 16)]),
      OrderedDict([('maxValue', 23)]),
      OrderedDict([('maxValue', 15)]),
      OrderedDict([('maxValue', 9)]),
      OrderedDict([('maxValue', 26)]),
      OrderedDict([('maxValue', 12)]),
      OrderedDict([('maxValue', 22)]),
      OrderedDict([('maxValue', 13)]),
      OrderedDict([('maxValue', 25)]),
      OrderedDict([('maxValue', 17)]),
      OrderedDict([('maxValue', 22)]),
      OrderedDict([('maxValue', 21)]),
      OrderedDict([('maxValue', 15)]),
      OrderedDict([('maxValue', 6)]),
      OrderedDict([('maxValue', 26)]),
      OrderedDict([('maxValue', 8)])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
    Routine fixation
    Routine routine
  LoopTerminator loop
